PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = dynamic
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    ImageComponent image
      image = correct_image.png
      ori [set every frame] = 90*t
      pos [set every frame] = (-0.5*t,-0.5*t)
      size [set every frame] = (0.25*t, 0.25*t)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
