PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'handedness': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exercicio
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = <Experimento vai aqui>
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  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Olá, seja bem vindo ao experimento Posner Cuieng Task.
        Targets aparecerão na tela e você deverá pressionar os botões 'left' ou 'right' de acordo com a posição deles.
        Pressione o 'enter' para começar!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Thanks!!
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Flow
  Routine welcome
  Routine trial
  Routine goodbye
