PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        fb= ''
      Each Frame:
        if planilhas == 'frutas.csv':
            image_comp.setImage(imagens)
            image_comp.setOpacity(1)
        else:
            fb = cidades
            image_comp.setOpacity(0.0)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $fb
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    ImageComponent image_comp
      image [set every repeat] = banana.jpg
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = planillhas - Página1.csv
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('planilhas', 'frutas.csv')]),
      OrderedDict([('planilhas', 'cidades.csv')])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $planilhas
      loopType = fullRandom
      nReps = 2
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      Routine trial
    LoopTerminator trials_2
  LoopTerminator trials
