PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = posnercueingtask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent cue
      fillColor = white
      ori = 90
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target
      fillColor = 1.0000, -1.0000, -1.0000
      pos = (0.5, 0)
      shape = circle
      size = (0.30,0.30)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if polygon.orientation == 90:
            resp = "Acertou!"
        else:
            resp = "Errou :("
    TextComponent resposta
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = $resp
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Flow
  Routine trial
