PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = posnercuiengtask_loops
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent cue
      fillColor = white
      ori [set every repeat] = arrow_orientation
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target
      fillColor = 1.0000, -1.0000, -1.0000
      pos [set every repeat] = (target_x, 0)
      shape = circle
      size = (0.30,0.30)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_keypress
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = myspreadsheet.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('arrow_orientation', 90), ('target_x_location', 0.5), ('correct_keypress', 'right'), ('condition', 'valid')]),
      OrderedDict([('arrow_orientation', 270), ('target_x_location', -0.5), ('correct_keypress', 'left'), ('condition', 'valid')]),
      OrderedDict([('arrow_orientation', 90), ('target_x_location', -0.5), ('correct_keypress', 'left'), ('condition', 'invalid')]),
      OrderedDict([('arrow_orientation', 270), ('target_x_location', 0.5), ('correct_keypress', 'right'), ('condition', 'invalid')])]
    Routine trial
  LoopTerminator trials
