PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': "['A','B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = posner_counterbalancing_example
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent cue
      fillColor = white
      ori [set every repeat] = arrow_orientation
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target
      fillColor = 1.0000, -1.0000, -1.0000
      pos [set every repeat] = (target_x, 0)
      shape = circle
      size = (0.30,0.30)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_keypress
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr == 1:
            fb = "Correct! Reaction Time: " + str(int(key_resp.rt*1000)) + 'ms'
            fbim = "correct_image.png"
        else:
            fb = "IncorrectReaction Time: " + str(int(key_resp.rt*1000)) + 'ms'
            fbim = "incorrect_image.jpg"
    ImageComponent image
      image [set every repeat] = $fbim
      pos = (-0.325, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextboxComponent fbtxt
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.30, 0)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $'group' + expInfo['group']+'.csv'
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('cond_file', 'myspreadsheet.csv')]),
      OrderedDict([('cond_file', 'myspreadsheet2.csv')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $cond_file
      loopType = random
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
